PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = task-switching-distanced-keys
  exportHTML = on Save
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = JS
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      Begin JS Experiment:
        responseNeeded = false; // Check if the response routine needs to run
      Begin JS Routine:
        const TOP = 0.25;
        const BOT = (-0.25);

        trialText.text = trials.thisN + "/" + trials.nTotal;

        if ( phaseLoopCounter == 0 ) {
            stimposidx = trials.thisN % 2;
        } else if ( phaseLoopCounter == 1 ) {
            stimposidx = (trials.thisN % 2) + 2;
        } else {
            stimposidx = trials.thisN % 4;
        }

        stimpos = stimpositions[stimposidx];
        imageName = stimImage[trials.thisN];

        // Set up the response image
        if ( stimposidx == 0 || stimposidx == 1) {
            responseImage = responseImageNames[0];
        } else {
            responseImage = responseImageNames[1];
        }

        feedbackColour = "white";
      Each JS Frame:
        if ( key_resp.keys === 'x' || key_resp.keys === 'm' ) {
            if ( corrAns[trials.thisN] === key_resp.keys ) {
                feedbackColour = 'green';
                responseNeeded  = false;
                if (t > key_resp.rt + 0.5) {
                    continueRoutine = false;
                }
            }
            if ( !(corrAns[trials.thisN] === key_resp.keys) ) {
                feedbackColour = 'red';
                responseNeeded = true;
                if (t > key_resp.rt + 0.5) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        thisExp.addData("correctAnswer", corrAns[trials.thisN]);
        thisExp.addData("gridLocation", stimpos);
    TextComponent trialText
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Any text

        including line break
    ImageComponent trialImage
      image [set every repeat] = $imageName
      pos [set every repeat] = $stimpos
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent trialGrid
      disabled = True
      image [set every repeat] = $imageGrid
      saveStartStop = False
      size [set every repeat] = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'x', 'm'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
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    PolygonComponent grid1
      fillColor [set every frame] = $feedbackColour
      lineColor [set every frame] = $feedbackColour
      lineWidth = gridLineWidth
      pos = (0, 0.25)
      saveStartStop = False
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent grid2
      fillColor = $[1,1,1]
      lineColor [set every frame] = $feedbackColour
      lineWidth = gridLineWidth
      saveStartStop = False
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent grid3
      fillColor = $[1,1,1]
      lineColor [set every frame] = $feedbackColour
      lineWidth = gridLineWidth
      ori = 90
      pos = (-0.25, 0.0)
      saveStartStop = False
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent grid4
      fillColor = $[1,1,1]
      lineColor [set every frame] = $feedbackColour
      lineWidth = gridLineWidth
      ori = 90
      pos = (0, 0.0)
      saveStartStop = False
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent grid5
      fillColor = $[1,1,1]
      lineColor [set every frame] = $feedbackColour
      lineWidth = gridLineWidth
      ori = 90
      pos = (0.25, 0.0)
      saveStartStop = False
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent grid6
      fillColor = $[1,1,1]
      lineColor [set every frame] = $feedbackColour
      lineWidth = gridLineWidth
      pos = (0, -0.25)
      saveStartStop = False
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Space to continue.
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instrCode
      Code Type = JS
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      Begin JS Experiment:
        phaseLoops = 3 // How many reps for phase loop
        phaseLoopCounter = -1;

        gridLineWidth = 10;
      Begin JS Routine:
        phaseLoopCounter += 1;

        stimpositions = [[(- 0.125), 0.125], [0.125, 0.125], [0.125, (- 0.125)], [(- 0.125), (- 0.125)]];
        imageNames = [ "diamond2.png", "diamond3.png", "square2.png", "square3.png"];
        responseImageNames = [ 'shape_response.png', 'filling_response.png' ];

        instructionText = [
            "Practice for SHAPE\nPress 'x' if you see a diamond. Press 'm' if you see a square.\n\nPress 'space' to continue",
            "Practice for FILLING\nPress 'x' if you see two dots. Press 'm' if you see three dots.\n\nPress 'space' to continue",
            "IN THE TOP HALF: Press 'x' if you see a diamond. Press 'm' if you see a square.\nIN THE BOTTOM HALF: Press 'x' if you see two dots. Press 'm' if you see three dots.\n\nPress 'space' to continue."
        ];

        instrText.text = instructionText[phaseLoopCounter];

        numTrials = [12,12,50]
        //numTrials = [1,1,5]


        totalTrials = numTrials[phaseLoopCounter];

        responseSwitches = new Array();
        corrAns = new Array();
        stimImage = new Array();

        for ( var i = 0; i < totalTrials/2; i++ ){
            responseSwitches[responseSwitches.length] = 0;
            responseSwitches[responseSwitches.length] = 1;
        }
        util.shuffle(responseSwitches);

        // Populate the corrAns array
        responseSwitches.forEach( function(item, index, array) {
            if ( item == 1 ) {
                corrAns.push('m');
            } else {
                corrAns.push('x');
            }
        });

        for ( var i = 0; i < responseSwitches.length; i++ ) {
            var posID;
            var imageName;
            if ( phaseLoopCounter == 0 ) {
                posID = i % 2;
            } else if ( phaseLoopCounter == 1 ) {
                posID = (i % 2) + 2;
            } else {
                posID = i % 4;
            }

            imageName = pickImg(posID, responseSwitches[i]);
            stimImage.push(imageName);
        }

        // Function to pick random images as a response
        function pickImg(pos, resp) {
            if ( pos == 0 || pos == 1 ) {
                if ( resp ) {
                    return getRandom1or0() ? imageNames[2] : imageNames[3];
                } else {
                    return getRandom1or0() ? imageNames[0] : imageNames[1];
                }
            } else {
                if ( resp ) {
                    return getRandom1or0() ? imageNames[1] : imageNames[3];
                } else {
                    return getRandom1or0() ? imageNames[0] : imageNames[2];
                }
            }
        }

        function getRandom1or0() {
            return Math.round( Math.random() );
        }

        console.log(responseSwitches);
        console.log(corrAns);
        console.log(stimImage);
  Routine instrTOP
    TextComponent text_instrTOP
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the TOP row (shape),
        a diamond requires a 'x' button press,
        a rectangle requires a 'm' button press.

        In this row,
        IGNORE the filling (dots)
        of the shape!

        Use separate hands for each button if possible.

        press 'space' to continue
    KeyboardComponent key_resp_instrTOP
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent topExample
      image = topexample_2.png
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine instrBOT
    TextComponent text_instrBOT
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the BOTTOM row (filling),
        a filling of 2 dots requires a 'x' button press,
        a filling of 3 dots requires a 'm' button press.

        In this row,
        IGNORE the outer shape!

        Use separate hands for each button if possible.

        press 'space' to continue
    KeyboardComponent key_resp_instrBOT
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent botExample
      image = botexample_2.png
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine response
    ImageComponent respImage
      image [set every repeat] = $responseImage
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent responseCode
      Code Type = JS
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      Begin JS Routine:
        console.log("We're in the routine");

        console.log(trials.thisN%2);
      Each JS Frame:
        if ( !responseNeeded ) {
            continueRoutine = false;
        }
  Routine setup
    CodeComponent setupCode
      Code Type = JS
      Begin JS Experiment:
        thisExp = psychoJS.experiment;
Flow
  Routine setup
  Routine instrTOP
  Routine instrBOT
  LoopInitiator phase loopType="TrialHandler"
    loopType = random
    nReps = phaseLoops
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    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = totalTrials
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      Routine trial
      Routine response
    LoopTerminator trials
  LoopTerminator phase
